// Artificial cells no longer need a default section.
//Network cell templates
//   C_Cell
//Artificial cells
//   S_NetStim


begintemplate C_Cell
public is_art
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend
public all

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, dend

proc topol() { local i
  connect dend(0), soma(0)
  basic_shape()
}
proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
  dend {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(-59, 60, 0, 1)}
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    dend all.append()

}
proc geom() {
  soma {  /*area = 500 */ L = diam = 12.6157  }
  dend {  L = 500  diam = 2  }
}
external lambda_f
proc geom_nseg() {
  dend { nseg = int((L/(0.3*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ra = 100
    cm = 1
  }
  soma {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  dend {
    insert pas
      g_pas = 0.0001
      e_pas = -65
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
objref syn_
proc synapses() {
  /* E0 */   dend syn_ = new ExpSyn(0.5)  synlist.append(syn_)
    syn_.tau = 1
}
func is_art() { return 0 }

endtemplate C_Cell

begintemplate S_NetStim
public pp, connect2target, x, y, z, position, is_art
objref pp
proc init() {
  pp = new NetStim()
    pp.number = 1
    pp.start = 0
}
func is_art() { return 1 }
obfunc connect2target() { localobj nc
  nc = new NetCon(pp, $o1)
  if (numarg() == 2) { $o2 = nc }
  return nc
}
proc position(){x=$1  y=$2  z=$3}
endtemplate S_NetStim

