//execute1("celltypes.element(\"Cell\")")

begintemplate Cell
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target
public icl

public soma, dend
public all

create soma, dend
objref synlist, icl

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
  soma {icl = new IClamp(0.5)}
  icl.del = 1
  icl.dur = 3
  icl.amp = 0
}

proc topol() { local i
  connect dend(0), soma(1)
  basic_shape()
}
proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
  dend {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(90, 0, 0, 1)}
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    dend all.append()

}
proc geom() {
  forsec all {  }
   soma.L = 10
   dend.L = 1000
   soma.diam = 10
   dend.diam = 1
  dend {  }
}
external lambda_f
proc geom_nseg() {
   dend { nseg = 100  }
}
proc biophys() {
  forsec all {
    Ra = 100
    cm = 1
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Cell
